# PRISTINE TEMPLATE - VARIAN PROBEAM CONFIGURATION

s:So/PBS/Type                     = "Beam"
s:So/PBS/Component                = "BeamPosition"
s:So/PBS/BeamParticle             = "proton"
d:So/PBS/BeamEnergy               = ENERGIPLACEHOLDER MeV
i:So/PBS/NumberOfHistoriesInRun   = 100000
i:Ts/ShowHistoryCountAtInterval   = 10000

# Karakteristik geometri berkas pensil (Gaussian Spread)
s:So/PBS/BeamPositionCutoffShape  = "Ellipse"
s:So/PBS/BeamPositionDistribution = "Gaussian"
d:So/PBS/BeamPositionCutoffX      = 20 mm
d:So/PBS/BeamPositionCutoffY      = 20 mm
d:So/PBS/BeamPositionSpreadX      = POSSPREADPLACEHOLDER mm
d:So/PBS/BeamPositionSpreadY      = POSSPREADPLACEHOLDER mm

s:So/PBS/BeamAngularDistribution  = "Gaussian"
d:So/PBS/BeamAngularCutoffX       = 90. deg
d:So/PBS/BeamAngularCutoffY       = 90. deg
d:So/PBS/BeamAngularSpreadX       = ANGSPREADPLACEHOLDER mrad
d:So/PBS/BeamAngularSpreadY       = ANGSPREADPLACEHOLDER mrad

# Geometri Beam (Waist ProBeam diposisikan di 42.1 cm sebelum isocenter)
s:Ge/BeamPosition/Parent   = "World"
s:Ge/BeamPosition/Type     = "Group"
d:Ge/BeamPosition/TransX   = 0. mm
d:Ge/BeamPosition/TransY   = 0. mm
d:Ge/BeamPosition/TransZ   = -42.1 cm 
d:Ge/BeamPosition/RotX     = 0. deg
d:Ge/BeamPosition/RotY     = 0. deg
d:Ge/BeamPosition/RotZ     = 0. deg

# Apparatus (Dunia)
d:Ge/World/HLX       = 220 cm
d:Ge/World/HLY       = 220 cm
d:Ge/World/HLZ       = 400 cm
b:Ge/World/Invisible = "TRUE"
s:Ge/World/Material  = "Air"

# Phantom PMMA
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Material = "G4_PLEXIGLASS"
d:Ge/Phantom/HLX      = 150.0 mm
d:Ge/Phantom/HLY      = 150.0 mm
d:Ge/Phantom/HLZ      = 150.0 mm
i:Ge/Phantom/ZBins    = 301
d:Ge/Phantom/TransX   = 0. mm
d:Ge/Phantom/TransY   = 0. mm
d:Ge/Phantom/TransZ   = 150. mm
d:Ge/Phantom/RotX     = 0. deg
d:Ge/Phantom/RotY     = 0. deg
d:Ge/Phantom/RotZ     = 0. deg

# Modul Fisika
sv:Ph/Default/Modules = 8 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4em-extra" "g4h-elastic_HP" "g4stopping" "g4ion-binarycascade" "g4decay" "g4radioactivedecay"
s:Ts/G4DataDirectory = "/home/nata/G4Data"

# Scorer (Pencatat Dosis)
s:Sc/DoseAtPhantom/Quantity    = "DoseToMedium"
s:Sc/DoseAtPhantom/Component   = "Phantom"
s:Sc/DoseAtPhantom/OutputFile  = "DoseAtPhantom"
s:Sc/DoseAtPhantom/OutputType  = "csv"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite" 
b:Sc/DoseAtPhantom/OutputToConsole = "TRUE"

# Pengaturan Eksekusi Otomatis
b:Ts/PauseBeforeQuit = "False"
b:Ts/UseQt           = "False"
i:Ts/Seed            = 1

# Pengaturan Multi-Threading
i:Ts/NumberOfThreads = 10
